CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:44
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does endwith ".czi")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:KuO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:Autofluorescence
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKuO
    Image or measurement?:Image
    Select the first image:KuO
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAutofluo
    Image or measurement?:Image
    Select the first image:Autofluorescence
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:7|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathGFP
    Image or measurement?:Image
    Select the first image:GFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:8|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
    Select the input image:ImageAfterMathKuO
    Name the output image:GaussianFilterKuO
    Sigma:2

GaussianFilter:[module_num:9|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
    Select the input image:ImageAfterMathAutofluo
    Name the output image:GaussianFilterautofluo
    Sigma:2

GaussianFilter:[module_num:10|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
    Select the input image:ImageAfterMathGFP
    Name the output image:GaussianFilterGFP
    Sigma:2

ImageMath:[module_num:11|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKuoAutofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKuO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Autofluorescence
    Multiply the second image by:1.0
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
ImageMath:[module_num:12|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterSubstractKuoAutofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKuO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:13|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notes:['Identifying KuO+ autofluorescent cells']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
    Select the input image:ImageAfterMathKuoAutofluo
    Name the primary objects to be identified:IdentifyPrimaryObjectsKuOautofluo
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:14|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notes:['Identifying MK (50,500)']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
    Select the input image:GaussianFilterGFP
    Name the primary objects to be identified:MK
    Typical diameter of objects, in pixel units (Min,Max):50,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
DilateObjects:[module_num:15|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
    Select the input object:MK
    Name the output object:DilateObjectsMK
    Structuring element:disk,3

MaskImage:[module_num:16|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notes:['Masking MK']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
    Select the input image:GFP
    Name the output image:MaskedMK
    Use objects or an image as a mask?:Objects
    Select object for mask:DilateObjectsMK
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    Invert the mask?:Yes

Threshold:[module_num:17|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
    Select the input image:ImageAfterSubstractKuoAutofluo
    Name the output image:ThresholdA
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:5
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Threshold:[module_num:18|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
    Select the input image:GaussianFilterGFP
    Name the output image:ThresholdB
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Threshold:[module_num:19|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
    Select the input image:ImageAfterMathKuoAutofluo
    Name the output image:ThresholdAutofluocells
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:20|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathDP
    Image or measurement?:Image
    Select the first image:ThresholdA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ThresholdB
    Multiply the second image by:1.0
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
MaskImage:[module_num:21|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
    Select the input image:ThresholdAutofluocells
    Name the output image:SP
    Use objects or an image as a mask?:Image
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    Select image for mask:ImageAfterMathDP
    Invert the mask?:Yes

Opening:[module_num:22|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
    Select the input image:SP
    Name the output image:OpeningSP
    Structuring element:disk,3

IdentifyPrimaryObjects:[module_num:23|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enabled:False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
    Select the input image:OpeningSP
    Name the primary objects to be identified:SPobjects
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:24|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
    Select the input image:ImageAfterSubstractKuoAutofluo
    Name the primary objects to be identified:IdentifyPrimaryObjectsAftersubstractKuo
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectIntensity:[module_num:25|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
    Select images to measure:ImageAfterMathDP, OpeningSP, SP, ThresholdA, ThresholdAutofluocells, ThresholdB
    Select objects to measure:IdentifyPrimaryObjectsAftersubstractKuo

FilterObjects:[module_num:26|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
    Select the objects to filter:IdentifyPrimaryObjectsAftersubstractKuo
    Name the output objects:FilterObjectsDP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsSP
    Select the measurement to filter by:Intensity_MeanIntensity_ImageAfterMathDP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

ImageMath:[module_num:27|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathSP
    Image or measurement?:Image
    Select the first image:ThresholdAutofluocells
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ImageAfterMathDP
    Multiply the second image by:1.0
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
ImageMath:[module_num:28|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathSP
    Image or measurement?:Image
    Select the first image:ImageAfterSubstractKuoAutofluo
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:29|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notes:['Identifying platelets']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
    Select the input image:MaskedMK
    Name the primary objects to be identified:platelet
    Typical diameter of objects, in pixel units (Min,Max):30,49
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureColocalization:[module_num:30|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enabled:False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
    Select images to measure:GFP, KuO
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:IdentifyPrimaryObjectsKuOautofluo
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectIntensity:[module_num:31|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
    Select images to measure:AF647, Autofluorescence, GFP, ImageAfterSubstractKuoAutofluo, KuO
    Select objects to measure:IdentifyPrimaryObjectsKuOautofluo

FilterObjects:[module_num:32|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
    Select the objects to filter:IdentifyPrimaryObjectsKuOautofluo
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Class name:1
    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_ImageAfterSubstractKuoAutofluo
    Filter using a minimum measurement value?:Yes
    Minimum value:0.02
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:33|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
    Select images to measure:AF647, Autofluorescence, GFP, KuO
    Select objects to measure:FilterObjects

FilterObjects:[module_num:34|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enabled:False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
    Select the objects to filter:FilterObjects
    Name the output objects:FilterObjectsDP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:FilterObjectsSP
    Select the measurement to filter by:Intensity_UpperQuartileIntensity_GFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.02
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:35|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
    Select objects to be masked:FilterObjects
    Name the masked objects:MaskedSP
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:platelet
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MeasureObjectIntensity:[module_num:36|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
    Select images to measure:AF647, GFP, KuO
    Select objects to measure:FilterObjectsDP, FilterObjectsSP

IdentifyPrimaryObjects:[module_num:37|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
    Select the input image:AF647
    Name the primary objects to be identified:IdentifyPrimaryObjectsAF647
    Typical diameter of objects, in pixel units (Min,Max):10,10000000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
FillObjects:[module_num:38|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
    Select the input object:IdentifyPrimaryObjectsAF647
    Name the output object:FillAF647
    Minimum hole size:64.0
    Planewise fill:No

MeasureObjectSizeShape:[module_num:39|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
    Select object sets to measure:IdentifyPrimaryObjectsAF647
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

Threshold:[module_num:40|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enabled:False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
    Select the input image:KuO
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureImageAreaOccupied:[module_num:41|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enabled:False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
    Measure the area occupied by:Binary Image
    Select binary images to measure:KuO
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
MeasureObjectNeighbors:[module_num:42|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:MK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:43|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:MK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:44|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilterObjectsDP|Intensity_IntegratedIntensityEdge_GFP,FilterObjectsDP|Intensity_IntegratedIntensityEdge_KuO,FilterObjectsDP|Intensity_IntegratedIntensityEdge_AF647,FilterObjectsDP|Intensity_MADIntensity_AF647,FilterObjectsDP|Intensity_MADIntensity_GFP,FilterObjectsDP|Intensity_MADIntensity_KuO,FilterObjectsDP|Intensity_MassDisplacement_KuO,FilterObjectsDP|Intensity_MassDisplacement_GFP,FilterObjectsDP|Intensity_MassDisplacement_AF647,FilterObjectsDP|Intensity_MaxIntensityEdge_AF647,FilterObjectsDP|Intensity_MaxIntensityEdge_GFP,FilterObjectsDP|Intensity_MaxIntensityEdge_KuO,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Run_1
    Overwrite existing files without warning?:No
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